PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Data filename = u'../data/%s_%s_%s' % (expInfo['Dyad ID'], expInfo['Subject ID'], expName)
  Experiment info = {'Dyad ID': '', 'Subject ID': '', 'Participant #': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  colPriority = {'stimuli': 'priority.HIGH', 'category': 'priority.HIGH', 'resp_key.keys': 'priority.HIGH', 'Dyad ID': 'priority.CRITICAL', 'Subject ID': 'priority.CRITICAL', 'thisN': 'priority.HIGH', 'runs': 'priority.HIGH'}
  expName = social-animation
  keyboardBackend = ioHub
  runMode = 1
  sortColumns = priority
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Routines
  Routine intro
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    CodeComponent initialize_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='SCANS') # sets variables for object info
        outlet = StreamOutlet(info)
        print('fNIRS setup done');
        outlet.push_sample(x=[0])
        print('trigger: 0')
    TextComponent Intro
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now watch short clips and decide if the shapes are having a social interaction or not.

        When the clip is finished, you will be promted to decide if there is a social interaction or not.

        For a social interaction, press the left arrow key. For a no interaction, press the right arrow key. If you are not sure, press the down arrow key.
    TextComponent start_task_text
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 7.5
      text = Press space to start the task.
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    KeyboardComponent start_task
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 7.5
      store = nothing
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  Routine video_phase
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    MovieComponent video_stim
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimuli
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = False
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    CodeComponent routine_trigger
      Code Type = Py
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      Begin Routine:
        i = int(Trials.thisN)
        condition = 0
        if Trials.trialList[i]['category'] == 'nonsocial' :
            condition = 1
        else :
            condition = 2
        trigger = ((i+1)*10) + condition
        outlet.push_sample(x=[trigger])
        print('trigger:', trigger)
  Routine resp_phase
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    TextComponent resp_prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Social         Unsure         No Interaction
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    KeyboardComponent resp_key
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent response_trigger
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
        print('trigger: 3')
  Routine fixation_phase
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    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    CodeComponent fixation_trigger
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[4])
        print('trigger: 4')
  Routine end_task
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    TextComponent end_task_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participanting. You may press the space bar to end the task. 
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    KeyboardComponent end_task_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent end_trigger
      Code Type = Py
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      End Routine:
        outlet.push_sample(x=[9])
        print('trigger: 9')
Flow
  Routine intro
  LoopInitiator Runs loopType="TrialHandler"
    conditionsFile = ../stimuli/run_files.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('runs', np.int64(1)), ('file', '../stimuli/run1.csv')]),
      OrderedDict([('runs', np.int64(2)), ('file', '../stimuli/run2.csv')])]
    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimuli', '../stimuli/COAXING-B.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/DANCING.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/MOCKING-A.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/SharingIcecream.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/SURPRISING-A.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/DRIFTING-A.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/RANDOM SOCIAL.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/STAR-A.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/RANDOM MECHANICAL.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/TENNIS-A.AVI'), ('category', 'nonsocial')])]
      Routine video_phase
      Routine resp_phase
      Routine fixation_phase
    LoopTerminator Trials
  LoopTerminator Runs
  Routine end_task
